PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = chess_experiment
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.2
      text = Hello world!
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  Routine routine_2_back
  Routine chess_puzzle
    TextComponent fixation_chess
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    MouseComponent mouse
      clickable = white_pieces
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0
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    ImageComponent chess_board
      image = images/board.png
      size = (1, 1)
      startVal [time (s)] = 0
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    CodeComponent move_piece
      Code Type = Py
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      Before Experiment:
        def coord_to_pos(coord):
            '''Convert coordinate system to
            position (in units of screen height)'''
            if type(coord) == int:
                pos = (coord/8) - 9/16
            else:
                pos = [0, 0]
                for i in range(len(coord)):
                    pos[i] = (coord[i]/8) - 9/16
            return pos

        def pos_to_coord(pos):
            '''Convert position (in units of screen height)
            to coordinate system'''
            if type(pos) == int:
                coord = int(round((pos + 9/16) * 8))
            else:
                coord = [1, 1]
                for i in range(len(pos)):
                    coord[i] = int(round((pos[i] + 9/16) * 8))
            return coord

        def code_to_coord(code):
            '''Convert FEN code to coordinate system'''
            x_axis = ["a", "b", "c", "d", "e", "f", "g", "h"]
            x_pos = x_axis.index(code[0]) + 1
            y_pos = int(code[1])
            return [x_pos, y_pos]

        def create_piece(code, x, y, i):
            '''Initialize and display a chess piece'''
            if code.islower():
                image_path = "images/" + code + ".png"
            else:
                image_path = "images/" + code + "_w.png"
            x_pos = coord_to_pos(x)
            y_pos = coord_to_pos(y)
            piece = visual.ImageStim(win=win, name=(code + str(x) + str(y)), image=image_path,
            anchor="center", pos=(x_pos, y_pos), size=(1/10, 1/10), depth = (-10 - i),
            texRes=128.0, interpolate=True)
            return piece

        def create_pieces(fen, board_state):
            '''Create all pieces in the FEN'''
            x = 1
            y = 8
            for i in range(len(fen[0])):
                element = fen[0][i]
                if (element == "/"):
                    x = 1
                    y -= 1
                if (element.isdigit()):
                    x += int(element)
                if (element in piece_codes):
                    piece = create_piece(element, x, y, i)
                    piece.setAutoDraw(True)
                    if element.isupper():
                        white_pieces.append(piece)
                    else:
                        black_pieces.append(piece)
                    board_state[y][x] = piece.name
                    x += 1
            return white_pieces, black_pieces, board_state

        def draw_square(code):
            coord = code_to_coord(code)
            x_pos = coord_to_pos(coord[0])
            y_pos = coord_to_pos(coord[1])

            polygon = visual.Rect(
                win=win, name=(code + '_square'),
                width=(1/8), height=(1/8),
                ori=0.0, pos=(x_pos, y_pos), anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor=[0, 0, 0], fillColor=[255/256, 87/256, 51/256],
                depth=-5, interpolate=True)
            polygon.setAutoDraw(True)
            return polygon

        def lerp_position(start_pos, end_pos, fraction):
            '''Linear interpolation between two points'''
            move_vector = np.subtract(end_pos, start_pos)
            current_pos = start_pos + (fraction * move_vector)
            return current_pos

        def search_pieces(piece_array, piece_name):
            '''Search for a piece in array by piece.name'''
            for piece in piece_array:
                if piece_name == piece.name:
                    return piece
            print("Warning: Did not find piece by name " + piece_name + " in array.")
            return None

        def evaluate_move(board_state, black_pieces, white_pieces, target_square):
            '''See if player move is taking an enemy piece'''
            print(target_square)
            target_square_content = board_state[target_square[1]][target_square[0]]
            if target_square_content:
                piece_to_take = search_pieces(black_pieces, target_square_content)
                if piece_to_take is None:
                    piece_to_take = search_pieces(white_pieces, target_square_content)
                return piece_to_take

        def move_piece(time_elapsed, piece, start_coord, end_coord, move_time):
            '''Move piece by a certain amount this frame'''
            start_pos = coord_to_pos(start_coord)
            end_pos = coord_to_pos(end_coord)
            move_finished = False
            if (time_elapsed < move_time):
                piece.pos = lerp_position(start_pos, end_pos, time_elapsed / move_time)
            else:
                piece.pos = end_pos
                move_finished = True
            return piece, move_finished

        def begin_move(piece, start_coord, end_coord):
            '''Initiate the computer movemement of a piece'''
            if piece is None:
                return None
            else:
                return piece, start_coord, end_coord

        def update_board_state(board_state, old_coord, new_coord, value):
            '''Update the board state matrix
            when a piece changes squares'''
            board_state[new_coord[1]][new_coord[0]] = value

            if board_state[old_coord[1]][old_coord[0]] == value: # Only delete old entry if it has not already been replaced
                board_state[old_coord[1]][old_coord[0]] = ''

            for row in board_state:
                print(row)
            return board_state

        # Could combine this function with evaluate_move():
        def check_valid_move(board_state, white_pieces, coord):
            '''See if player move is valid'''
            target_square_content = board_state[coord[1]][coord[0]]
            if coord[0] < 1 or coord[0] > 8 or coord[1] < 1 or coord[1] > 8:
                return False
            elif search_pieces(white_pieces, target_square_content):
                return False
            else:
                return True

        def check_correct_move(move_num, moves, start_coord, end_coord):
            correct_start = code_to_coord(moves[move_num][0:2])
            correct_end = code_to_coord(moves[move_num][2:4])
            if (start_coord == correct_start) and (end_coord == correct_end):
                return True
            else:
                return False

        def clear_pieces(pieces):
            for piece in pieces:
                piece.setAutoDraw(False)
        #        piece._unload()


        def find_empty_take_square(board_state):
            num_cols = 3

            target = [9,8]
            while board_state[target[1]][target[0]]:
                if target[0] == 8 + num_cols:
                    target[0] = 9
                    target[1] = target[1] - 1
                else:
                    target[0] = target[0] + 1
            return target



        feedback_text = ''

        # Data for piece codes and x axis labels
        piece_codes = ["p", "n", "b", "r", "q", "k", "P", "N", "B", "R", "Q", "K"]

        # Time it takes for a piece to move from A to B
        # Could instead make it a speed parameter
        move_time = 1




        ## Valid moves per piece
        #p_moves = [[0,-1], [0,-2]]
        #n_moves = [[-2,1], [-1,2], [1,2], [2,1], [2,-1], [1,-2], [-1,-2], [-2,-1]]
        #b_moves = [["-inf","inf"], ["inf","inf"], ["inf","-inf"], ["-inf","-inf"]]
        #r_moves = [["-inf",0], [0,"inf"], ["inf",0], [0,"-inf"]]
        #q_moves = b_moves + r_moves
        #k_moves = [[-1,0], [-1,1], [0,1], [1,1], [1,0], [1,-1], [0,-1], [-1,1]]

        #P_moves = [[
      Begin Routine:
        # Begin Routine

        # Initialize board state and piece arrays
        board_state = [['' for i in range(12)] for i in range(9)]
        white_pieces = []
        black_pieces = []

        # For testing: sample FEN string
        fen_str = FEN
        fen = fen_str.split(" ")

        moves_str = moves
        moves = moves_str.split()

        # Populate the board based on the FEN
        white_pieces, black_pieces, board_state = create_pieces(fen, board_state)
        clicked_piece = None

        # Set up first computer move
        black_move = True
        move_num = 0

        def start_black_move(moves, move_num, board_state):
            # Generate yellow rectangles over first black move
            move_start = moves[move_num][0:2]
            move_end = moves[move_num][2:4]
            highlight_squares = []
            for move in [move_start, move_end]:
                highlight_squares.append(draw_square(move))

            # Begin first move
            # This code needs to be generalized in a function
            start_coord = code_to_coord(move_start)
            end_coord = code_to_coord(move_end)
            piece_name = board_state[start_coord[1]][start_coord[0]]

            moving_piece = search_pieces(black_pieces, piece_name)

            return moving_piece, start_coord, end_coord, highlight_squares

        moving_piece, start_coord, end_coord, highlight_squares = start_black_move(moves, move_num, board_state)

        # Initialize computer movement clock
        move_clock = core.Clock()
        move_clock.reset(newT=0.0)

        # Start mouse clock
        # This is for a click cooldown to prevent accidental double-clicking
        mouse_clock = core.Clock()
        mouse_clock.addTime(100)

        # Track correct/incorrect moves
        player_move_start = []
        correct_move = True
      Each Frame:
        # Each Frame

        # Code executed if a piece is crrently being
        # moved by the computer
        if moving_piece is not None:
            time_elapsed = move_clock.getTime()
            moving_piece, move_finished = move_piece(time_elapsed, moving_piece, start_coord, end_coord, move_time)
            if move_finished:
                piece_taken = evaluate_move(board_state, black_pieces, white_pieces, end_coord)

                board_state = update_board_state(board_state, start_coord, end_coord, moving_piece.name)

                # Reset clock
                move_clock.reset()

                if black_move:
                    move_num = move_num + 1
                    black_move = False

                if piece_taken:
                    take_coord = find_empty_take_square(board_state) # Create function to get empty coord
                    moving_piece, start_coord, end_coord = begin_move(piece_taken, end_coord, take_coord)
                else:
                    moving_piece = None

        # Check mouse click cooldown
        cooldown = mouse_clock.getTime() < 0.1

        # Check for piece selection
        if clicked_piece is None and moving_piece is None:
            for piece in white_pieces:                # for each pic
                if not cooldown and mouse.isPressedIn(piece, buttons=[0]):    # If the picture is currently click
                    clicked_piece = piece
                    player_move_start = pos_to_coord(clicked_piece.pos)
                    mouse_clock.reset()
        # Check for piece placement
        elif clicked_piece is not None:
            clicked_piece.pos = mouse.getPos()

            if not cooldown and mouse.isPressedIn(clicked_piece, buttons=[0]):
                snapped_coord = pos_to_coord(mouse.getPos())

                # See if move is a redeposit
                redeposit = False
                if snapped_coord == player_move_start:
                    redeposit = True

                valid_move = check_valid_move(board_state, white_pieces, snapped_coord)
                if valid_move or redeposit:

                    clicked_piece.pos = coord_to_pos(snapped_coord)
                    piece_taken = evaluate_move(board_state, black_pieces, white_pieces, snapped_coord)

                    # Reset clock
                    move_clock.reset()

                    board_state = update_board_state(board_state, player_move_start, snapped_coord, clicked_piece.name)

                    if piece_taken and not redeposit:
                        take_coord = find_empty_take_square(board_state)
                        moving_piece, start_coord, end_coord = begin_move(piece_taken, snapped_coord, take_coord)

                    clicked_piece = None

                    # Check for correct move or end of puzzle
                    correct_move = check_correct_move(move_num, moves, player_move_start, snapped_coord)

                    if redeposit:
                        print("redepositing")
                    elif (correct_move == False) or (move_num == len(moves) - 1):
                        feedback_text = "Correct" if correct_move else "Incorrect"
                        continueRoutine = False
                    else:
                        clear_pieces(highlight_squares)
                        move_num = move_num + 1
                        black_move = True

                mouse_clock.reset()

        if (black_move) and (moving_piece is None):
            moving_piece, start_coord, end_coord, highlight_squares = start_black_move(moves, move_num, board_state)
      End Routine:
        feedback_text_slide.text = feedback_text

        clear_pieces(white_pieces)
        clear_pieces(black_pieces)
        clear_pieces(highlight_squares)

        win.flip()
  Routine two_back
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent letter
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $thisLetter
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      storeCorrect = True
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  Routine instructions_two_back
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the 2-back experiment.

        Look at the letter appearing on the screen. Your task is to remember the letter appearing two steps before the current letter. If the current letter is the same as the letter two steps before, e.g. an 'X' followed by a 'Y' followed by another 'X', press the spacebar.

        Press 'space' to begin.
    KeyboardComponent press_to_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_chess_puzzle
    TextComponent chess_instructions_1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Instructions slide

        Complete the chess puzzle
    KeyboardComponent next_routine_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
    TextComponent feedback_text_slide
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $feedback_text
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Flow
  Routine instructions_chess_puzzle
  LoopInitiator chess_trials loopType="TrialHandler"
    conditionsFile = conditions_chess.tsv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('FEN', '8/1p3p1k/6r1/p1p2KR1/P2pP3/1P1P4/2P5/8 b - - 8 52'), ('moves', 'g6g5 f5g5')]),
      OrderedDict([('FEN', '5rk1/p5pp/4Q3/8/1P1P4/2P1q2P/P2p1RP1/5RK1 b - - 0 30'), ('moves', 'e3e6 f2f8')]),
      OrderedDict([('FEN', '6k1/5ppq/8/p2r2B1/1p6/5P2/6PP/R3R2K b - - 0 37'), ('moves', 'd5g5 e1e8')]),
      OrderedDict([('FEN', '3k4/pp1P4/3KPr2/8/8/8/PP4Rp/8 b - - 0 56'), ('moves', 'h2h1q g2g8 f6f8 g8f8')]),
      OrderedDict([('FEN', '6k1/p4p1p/4r1pP/1pKR1pP1/1P3r2/2P5/8/8 b - - 0 40'), ('moves', 'a7a6 d5d8 e6e8 d8e8')]),
      OrderedDict([('FEN', '1r6/1P6/3p4/3B1k2/2P3p1/6Pp/2r1RK1P/8 b - - 4 44'), ('moves', 'c2e2 f2e2')]),
      OrderedDict([('FEN', 'B1r3k1/p1p2ppp/1p4q1/2p1P3/2b2Pn1/P5P1/3R3P/3R2K1 b - - 0 23'), ('moves', 'c8a8 d2d8 a8d8 d1d8')]),
      OrderedDict([('FEN', '5b2/5p2/2k1p1P1/p1p1Pn1K/1pP5/1P1N4/P2B4/8 b - - 0 49'), ('moves', 'f7g6 h5g6')]),
      OrderedDict([('FEN', '3r2k1/1pp2ppp/p1p1rq2/6Q1/4P1b1/3P1N2/PPPN1PK1/R4R2 b - - 9 19'), ('moves', 'f6g5 f3g5')])]
    Routine chess_puzzle
    Routine feedback
  LoopTerminator chess_trials
  Routine instructions_two_back
  LoopInitiator trials_two_back loopType="TrialHandler"
    conditionsFile = conditions_twoback.tsv
    loopType = sequential
    nReps = 5
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    conditions:
      [OrderedDict([('thisLetter', 'L'), ('target', 0), ('corrAns', None)]),
      OrderedDict([('thisLetter', 'J'), ('target', 0), ('corrAns', None)]),
      OrderedDict([('thisLetter', 'A'), ('target', 0), ('corrAns', None)]),
      OrderedDict([('thisLetter', 'K'), ('target', 0), ('corrAns', None)]),
      OrderedDict([('thisLetter', 'A'), ('target', 1), ('corrAns', 'space')])]
    Routine two_back
  LoopTerminator trials_two_back
